opentrons/protocol-designer 6.1.0
schemaVersion: 6
protocolName: 11 compts PB design
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p20_single_gen2: {mount: left}
  p300_single_gen2: {mount: right}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, location: 12}
  PB 12 wells: {definitionId: opentrons/corning_12_wellplate_6.9ml_flat/1, location: 8}
  Experiment: {definitionId: opentrons/nest_96_wellplate_200ul_flat/1, location: 10}
  Opentrons 96 Tip Rack 20 µL: {definitionId: opentrons/opentrons_96_tiprack_20ul/1, location: 11}
  Opentrons 96 Tip Rack 300 µL: {definitionId: opentrons/opentrons_96_tiprack_300ul/1, location: 9}
  11 compts: {definitionId: opentrons/opentrons_24_tuberack_eppendorf_1.5ml_safelock_snapcap/1, location: 7}
pipetteTiprackAssignments:
  p20_single_gen2: opentrons/opentrons_96_tiprack_20ul/1
  p300_single_gen2: opentrons/opentrons_96_tiprack_300ul/1
ingredients:
  - SS
  - FC
  - ZnSO4 7H2O
  - HC21
  - L-AG
  - Ethano.
  - ME
  - P_LAA
  - T3
  - T4
  - Lipmix
  - Basal media: {description: DMEM+ X}
  - Cell line
ingredLocations:
  PB 12 wells:
    Basal media {volume: 1900}: A1, B1, A2-C2, A3-C3, A4-C4
    Basal media {volume: 1940}: C1
  11 compts:
    SS {volume: 1000}: A1
    FC {volume: 1000}: A2
    ZnSO4 7H2O {volume: 1000}: A3
    HC21 {volume: 1000}: A4
    L-AG {volume: 1000}: A5
    Ethano. {volume: 1000}: A6
    ME {volume: 1000}: B1
    P_LAA {volume: 1000}: B2
    T3 {volume: 1000}: B3
    T4 {volume: 1000}: B4
    Lipmix {volume: 1000}: B5
    Cell line {volume: 1000}: D1
savedStepForms:
- stepType: moveLiquid
  stepName: transfer ss
  pipette: p20_single_gen2
  volume: 2
  path: multiDispense
  changeTip: always
  aspirate_labware: 11 compts
  aspirate_wells: A1
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  aspirate_flowRate: 20
  aspirate_mix_checkbox: true
  aspirate_mix_times: 1
  aspirate_mix_volume: 20
  aspirate_touchTip_checkbox: true
  aspirate_touchTip_mmFromBottom: 29.8
  dispense_labware: PB 12 wells
  dispense_wells: A2-C2, A3-C3
  dispense_flowRate: 20
  dispense_mmFromBottom: 3.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 2
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer FC
  pipette: p20_single_gen2
  volume: 4
  path: multiDispense
  changeTip: always
  aspirate_labware: 11 compts
  aspirate_wells: A2
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  aspirate_flowRate: 20
  aspirate_mix_checkbox: true
  aspirate_mix_times: 1
  aspirate_mix_volume: 20
  aspirate_touchTip_checkbox: true
  aspirate_touchTip_mmFromBottom: 29.8
  dispense_labware: PB 12 wells
  dispense_wells: B1, A2, C2, A3, A4, C4
  dispense_flowRate: 20
  dispense_mmFromBottom: 3.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 4
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer Z7
  pipette: p20_single_gen2
  volume: 2
  path: multiDispense
  changeTip: always
  aspirate_labware: 11 compts
  aspirate_wells: A3
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  aspirate_flowRate: 20
  aspirate_mix_checkbox: true
  aspirate_mix_times: 1
  aspirate_mix_volume: 20
  aspirate_touchTip_checkbox: true
  aspirate_touchTip_mmFromBottom: 29.8
  dispense_labware: PB 12 wells
  dispense_wells: A1, B1, A2, B2, C3, A4
  dispense_flowRate: 20
  dispense_mmFromBottom: 3.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 2
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer HC21
  pipette: p20_single_gen2
  volume: 4
  path: multiDispense
  changeTip: always
  aspirate_labware: 11 compts
  aspirate_wells: A4
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  aspirate_flowRate: 20
  aspirate_mix_checkbox: true
  aspirate_mix_times: 1
  aspirate_mix_volume: 20
  aspirate_touchTip_checkbox: true
  aspirate_touchTip_mmFromBottom: 29.8
  dispense_labware: PB 12 wells
  dispense_wells: A1, B1, C2, B3, C3, C4
  dispense_flowRate: 20
  dispense_mmFromBottom: 3.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 4
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer L-AG
  pipette: p20_single_gen2
  volume: 6
  path: multiDispense
  changeTip: always
  aspirate_labware: 11 compts
  aspirate_wells: A5
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  aspirate_flowRate: 20
  aspirate_mix_checkbox: true
  aspirate_mix_times: 1
  aspirate_mix_volume: 20
  aspirate_touchTip_checkbox: true
  aspirate_touchTip_mmFromBottom: 29.8
  dispense_labware: PB 12 wells
  dispense_wells: A1, B2, A3, B3, A4, C4
  dispense_flowRate: 20
  dispense_mmFromBottom: 3.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 6
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer Ethano.
  pipette: p20_single_gen2
  volume: 2
  path: multiDispense
  changeTip: always
  aspirate_labware: 11 compts
  aspirate_wells: A6
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  aspirate_flowRate: 20
  aspirate_mix_checkbox: true
  aspirate_mix_times: 1
  aspirate_mix_volume: 20
  aspirate_touchTip_checkbox: true
  aspirate_touchTip_mmFromBottom: 29.8
  dispense_labware: PB 12 wells
  dispense_wells: B1, B2, C2, B3, A4, B4
  dispense_flowRate: 20
  dispense_mmFromBottom: 3.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 2
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer ME
  pipette: p20_single_gen2
  volume: 4.4
  path: multiDispense
  changeTip: always
  aspirate_labware: 11 compts
  aspirate_wells: B1
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  aspirate_flowRate: 20
  aspirate_mix_checkbox: true
  aspirate_mix_times: 1
  aspirate_mix_volume: 20
  aspirate_touchTip_checkbox: true
  aspirate_touchTip_mmFromBottom: 29.8
  dispense_labware: PB 12 wells
  dispense_wells: B1, B2, A3, C3, B4, C4
  dispense_flowRate: 20
  dispense_mmFromBottom: 3.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 4.4
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer P_LAA
  pipette: p20_single_gen2
  volume: 2
  path: multiDispense
  changeTip: always
  aspirate_labware: 11 compts
  aspirate_wells: B2
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  aspirate_flowRate: 20
  aspirate_mix_checkbox: true
  aspirate_mix_times: 1
  aspirate_mix_volume: 20
  aspirate_touchTip_checkbox: true
  aspirate_touchTip_mmFromBottom: 29.8
  dispense_labware: PB 12 wells
  dispense_wells: A2, B3, C3, A4-C4
  dispense_flowRate: 20
  dispense_mmFromBottom: 3.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 2
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer T3
  pipette: p20_single_gen2
  volume: 3
  path: multiDispense
  changeTip: always
  aspirate_labware: 11 compts
  aspirate_wells: B3
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  aspirate_flowRate: 20
  aspirate_mix_checkbox: true
  aspirate_mix_times: 1
  aspirate_mix_volume: 20
  aspirate_touchTip_checkbox: true
  aspirate_touchTip_mmFromBottom: 29.8
  dispense_labware: PB 12 wells
  dispense_wells: A1, B1, A2, A3, B3, B4
  dispense_flowRate: 20
  dispense_mmFromBottom: 3.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 3
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer T4
  pipette: p300_single_gen2
  volume: 20
  path: multiDispense
  changeTip: always
  aspirate_labware: 11 compts
  aspirate_wells: B4
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  aspirate_flowRate: 300
  aspirate_mix_checkbox: true
  aspirate_mix_times: 1
  aspirate_mix_volume: 300
  aspirate_touchTip_checkbox: true
  aspirate_touchTip_mmFromBottom: 29.8
  dispense_labware: PB 12 wells
  dispense_wells: A1, C2, A3, C3, A4, B4
  dispense_flowRate: 300
  dispense_mmFromBottom: 3.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 20
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer Lipmix
  pipette: p20_single_gen2
  volume: 4
  path: multiDispense
  changeTip: always
  aspirate_labware: 11 compts
  aspirate_wells: B5
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  aspirate_flowRate: 20
  aspirate_mix_checkbox: true
  aspirate_mix_times: 1
  aspirate_mix_volume: 20
  aspirate_touchTip_checkbox: true
  aspirate_touchTip_mmFromBottom: 29.8
  dispense_labware: PB 12 wells
  dispense_wells: A1, A2-C2, B4, C4
  dispense_flowRate: 20
  dispense_mmFromBottom: 2
  disposalVolume_checkbox: true
  disposalVolume_volume: 4
  blowout_location: Trash
- stepType: pause
  stepName: pause
  pauseAction: untilResume
  pauseMessage: 1. Put cells on the rack
    2. Plate shaking manually
- stepType: moveLiquid
  stepName: transfer cells
  pipette: p300_single_gen2
  volume: 60
  path: multiDispense
  changeTip: always
  aspirate_labware: 11 compts
  aspirate_wells: D1
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  aspirate_flowRate: 100
  aspirate_mix_checkbox: true
  aspirate_mix_times: 3
  aspirate_mix_volume: 300
  aspirate_touchTip_checkbox: true
  aspirate_touchTip_mmFromBottom: 29.8
  dispense_labware: PB 12 wells
  dispense_wells: A1-C1, A2-C2, A3-C3, A4-C4
  dispense_flowRate: 50
  dispense_mmFromBottom: 2
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 12.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 60
  blowout_location: Trash
- stepType: pause
  stepName: pause
  pauseAction: untilResume
  pauseMessage: 12wellyx
- stepType: moveLiquid
  stepName: transfer PB1
  pipette: p300_single_gen2
  volume: 100
  path: multiDispense
  changeTip: once
  aspirate_labware: PB 12 wells
  aspirate_wells: A1
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  aspirate_flowRate: 300
  aspirate_mix_checkbox: true
  aspirate_mix_times: 3
  aspirate_mix_volume: 300
  aspirate_mmFromBottom: 2
  dispense_labware: Experiment
  dispense_wells: E2, B6, C8, D11
  dispense_flowRate: 300
  dispense_mmFromBottom: 2
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer PB2
  pipette: p300_single_gen2
  volume: 100
  path: multiDispense
  changeTip: once
  aspirate_labware: PB 12 wells
  aspirate_wells: A2
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  aspirate_flowRate: 300
  aspirate_mix_checkbox: true
  aspirate_mix_times: 3
  aspirate_mix_volume: 300
  aspirate_mmFromBottom: 2
  dispense_labware: Experiment
  dispense_wells: E3, C5, F6, D9
  dispense_flowRate: 300
  dispense_mmFromBottom: 2
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer PB3
  pipette: p300_single_gen2
  volume: 100
  path: multiDispense
  changeTip: once
  aspirate_labware: PB 12 wells
  aspirate_wells: A3
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  aspirate_flowRate: 300
  aspirate_mix_checkbox: true
  aspirate_mix_times: 3
  aspirate_mix_volume: 300
  aspirate_mmFromBottom: 2
  dispense_labware: Experiment
  dispense_wells: F3, G5, D6, E9
  dispense_flowRate: 300
  dispense_mmFromBottom: 2
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer PB4
  pipette: p300_single_gen2
  volume: 100
  path: multiDispense
  changeTip: once
  aspirate_labware: PB 12 wells
  aspirate_wells: A4
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  aspirate_flowRate: 300
  aspirate_mix_checkbox: true
  aspirate_mix_times: 3
  aspirate_mix_volume: 300
  aspirate_mmFromBottom: 2
  dispense_labware: Experiment
  dispense_wells: C2, B4, B5, F10
  dispense_flowRate: 300
  dispense_mmFromBottom: 2
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer PB5
  pipette: p300_single_gen2
  volume: 100
  path: multiDispense
  changeTip: once
  aspirate_labware: PB 12 wells
  aspirate_wells: B1
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  aspirate_flowRate: 300
  aspirate_mix_checkbox: true
  aspirate_mix_times: 3
  aspirate_mix_volume: 300
  aspirate_mmFromBottom: 2
  dispense_labware: Experiment
  dispense_wells: C7, E7, G7, C11
  dispense_flowRate: 300
  dispense_mmFromBottom: 2
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer PB6
  pipette: p300_single_gen2
  volume: 100
  path: multiDispense
  changeTip: once
  aspirate_labware: PB 12 wells
  aspirate_wells: B2
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  aspirate_flowRate: 300
  aspirate_mix_checkbox: true
  aspirate_mix_times: 3
  aspirate_mix_volume: 300
  aspirate_mmFromBottom: 2
  dispense_labware: Experiment
  dispense_wells: C3, G3, B8, E8
  dispense_flowRate: 300
  dispense_mmFromBottom: 2
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer PB7
  pipette: p300_single_gen2
  volume: 100
  path: multiDispense
  changeTip: once
  aspirate_labware: PB 12 wells
  aspirate_wells: B3
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  aspirate_flowRate: 300
  aspirate_mix_checkbox: true
  aspirate_mix_times: 3
  aspirate_mix_volume: 300
  aspirate_mmFromBottom: 2
  dispense_labware: Experiment
  dispense_wells: D4, F5, C6, G11
  dispense_flowRate: 300
  dispense_mmFromBottom: 2
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer PB8
  pipette: p300_single_gen2
  volume: 100
  path: multiDispense
  changeTip: once
  aspirate_labware: PB 12 wells
  aspirate_wells: B4
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  aspirate_flowRate: 300
  aspirate_mix_checkbox: true
  aspirate_mix_times: 3
  aspirate_mix_volume: 300
  aspirate_mmFromBottom: 2
  dispense_labware: Experiment
  dispense_wells: B2, E5, C10, E10
  dispense_flowRate: 300
  dispense_mmFromBottom: 2
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer PB9
  pipette: p300_single_gen2
  volume: 100
  path: multiDispense
  changeTip: once
  aspirate_labware: PB 12 wells
  aspirate_wells: C1
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  aspirate_flowRate: 300
  aspirate_mix_checkbox: true
  aspirate_mix_times: 3
  aspirate_mix_volume: 300
  aspirate_mmFromBottom: 2
  dispense_labware: Experiment
  dispense_wells: C4, D7, F9, G9
  dispense_flowRate: 300
  dispense_mmFromBottom: 2
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer PB10
  pipette: p300_single_gen2
  volume: 100
  path: multiDispense
  changeTip: once
  aspirate_labware: PB 12 wells
  aspirate_wells: C2
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  aspirate_flowRate: 300
  aspirate_mix_checkbox: true
  aspirate_mix_times: 3
  aspirate_mix_volume: 300
  aspirate_mmFromBottom: 2
  dispense_labware: Experiment
  dispense_wells: D5, B7, F8, C9
  dispense_flowRate: 300
  dispense_mmFromBottom: 2
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer PB11
  pipette: p300_single_gen2
  volume: 100
  path: multiDispense
  changeTip: once
  aspirate_labware: PB 12 wells
  aspirate_wells: C3
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  aspirate_flowRate: 300
  aspirate_mix_checkbox: true
  aspirate_mix_times: 3
  aspirate_mix_volume: 300
  aspirate_mmFromBottom: 2
  dispense_labware: Experiment
  dispense_wells: E4, G4, B9, D10
  dispense_flowRate: 300
  dispense_mmFromBottom: 2
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer PB12
  pipette: p300_single_gen2
  volume: 100
  path: multiDispense
  changeTip: once
  aspirate_labware: PB 12 wells
  aspirate_wells: C4
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  aspirate_flowRate: 300
  aspirate_mix_checkbox: true
  aspirate_mix_times: 3
  aspirate_mix_volume: 300
  aspirate_mmFromBottom: 2
  dispense_labware: Experiment
  dispense_wells: D2, F7, D8, G10
  dispense_flowRate: 300
  dispense_mmFromBottom: 2
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: source_well
labwareDefinitions:
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commands:
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- pickUpTip: {pipetteId: p20_single_gen2, labwareId: Opentrons 96 Tip Rack 20 µL, wellName: A1}
- aspirate: {pipetteId: p20_single_gen2, volume: 20, labwareId: 11 compts, wellName: A1, wellLocation: {origin: bottom, offset: {z: 1}}, flowRate: 20}
- dispense: {pipetteId: p20_single_gen2, volume: 20, labwareId: 11 compts, wellName: A1, wellLocation: {origin: bottom, offset: {z: 1}}, flowRate: 20}
- aspirate: {pipetteId: p20_single_gen2, volume: 14, labwareId: 11 compts, wellName: A1, wellLocation: {origin: bottom, offset: {z: 1}}, flowRate: 20}
- touchTip: {pipetteId: p20_single_gen2, labwareId: 11 compts, wellName: A1, wellLocation: {origin: bottom, offset: {z: 29.8}}}
- dispense: {pipetteId: p20_single_gen2, volume: 2, labwareId: PB 12 wells, wellName: A2, wellLocation: {origin: bottom, offset: {z: 3.5}}, flowRate: 20}
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