opentrons/protocol-designer 6.1.0
schemaVersion: 6
protocolName: 12well-96well_移液_02022023_yjl_gh
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p300_single_gen2: {mount: right}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, location: 12}
  PB 12 wells: {definitionId: opentrons/corning_12_wellplate_6.9ml_flat/1, location: 8}
  Experiment: {definitionId: opentrons/nest_96_wellplate_200ul_flat/1, location: 11}
  Opentrons 96 Tip Rack 300 µL: {definitionId: opentrons/opentrons_96_tiprack_300ul/1, location: 9}
pipetteTiprackAssignments:
  p300_single_gen2: opentrons/opentrons_96_tiprack_300ul/1
ingredients:
  - Basal media: {description: DMEM+ X}
ingredLocations:
  PB 12 wells:
    Basal media {volume: 1900}: A1, B1, A2-C2, A3-C3, A4-C4
    Basal media {volume: 1940}: C1
savedStepForms:
- stepType: moveLiquid
  stepName: transfer PB1
  pipette: p300_single_gen2
  volume: 100
  path: multiDispense
  changeTip: once
  aspirate_labware: PB 12 wells
  aspirate_wells: A1
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  aspirate_flowRate: 300
  aspirate_mix_checkbox: true
  aspirate_mix_times: 3
  aspirate_mix_volume: 300
  aspirate_mmFromBottom: 2
  dispense_labware: Experiment
  dispense_wells: E2, B6, C8, D11
  dispense_flowRate: 300
  dispense_mmFromBottom: 2
  dispense_delay_checkbox: true
  dispense_delay_seconds: 1
  dispense_delay_mmFromBottom: 2
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer PB2
  pipette: p300_single_gen2
  volume: 100
  path: multiDispense
  changeTip: once
  aspirate_labware: PB 12 wells
  aspirate_wells: A2
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  aspirate_flowRate: 300
  aspirate_mix_checkbox: true
  aspirate_mix_times: 3
  aspirate_mix_volume: 300
  aspirate_mmFromBottom: 2
  dispense_labware: Experiment
  dispense_wells: E3, C5, F6, D9
  dispense_flowRate: 300
  dispense_mmFromBottom: 2
  dispense_delay_checkbox: true
  dispense_delay_seconds: 1
  dispense_delay_mmFromBottom: 2
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer PB3
  pipette: p300_single_gen2
  volume: 100
  path: multiDispense
  changeTip: once
  aspirate_labware: PB 12 wells
  aspirate_wells: A3
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  aspirate_flowRate: 300
  aspirate_mix_checkbox: true
  aspirate_mix_times: 3
  aspirate_mix_volume: 300
  aspirate_mmFromBottom: 2
  dispense_labware: Experiment
  dispense_wells: F3, G5, D6, E9
  dispense_flowRate: 300
  dispense_mmFromBottom: 2
  dispense_delay_checkbox: true
  dispense_delay_seconds: 1
  dispense_delay_mmFromBottom: 2
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer PB4
  pipette: p300_single_gen2
  volume: 100
  path: multiDispense
  changeTip: once
  aspirate_labware: PB 12 wells
  aspirate_wells: A4
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  aspirate_flowRate: 300
  aspirate_mix_checkbox: true
  aspirate_mix_times: 3
  aspirate_mix_volume: 300
  aspirate_mmFromBottom: 2
  dispense_labware: Experiment
  dispense_wells: C2, B4, B5, F10
  dispense_flowRate: 300
  dispense_mmFromBottom: 2
  dispense_delay_checkbox: true
  dispense_delay_seconds: 1
  dispense_delay_mmFromBottom: 2
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer PB5
  pipette: p300_single_gen2
  volume: 100
  path: multiDispense
  changeTip: once
  aspirate_labware: PB 12 wells
  aspirate_wells: B1
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  aspirate_flowRate: 300
  aspirate_mix_checkbox: true
  aspirate_mix_times: 3
  aspirate_mix_volume: 300
  aspirate_mmFromBottom: 2
  dispense_labware: Experiment
  dispense_wells: C7, E7, G7, C11
  dispense_flowRate: 300
  dispense_mmFromBottom: 2
  dispense_delay_checkbox: true
  dispense_delay_seconds: 1
  dispense_delay_mmFromBottom: 2
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer PB6
  pipette: p300_single_gen2
  volume: 100
  path: multiDispense
  changeTip: once
  aspirate_labware: PB 12 wells
  aspirate_wells: B2
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  aspirate_flowRate: 300
  aspirate_mix_checkbox: true
  aspirate_mix_times: 3
  aspirate_mix_volume: 300
  aspirate_mmFromBottom: 2
  dispense_labware: Experiment
  dispense_wells: C3, G3, B8, E8
  dispense_flowRate: 300
  dispense_mmFromBottom: 2
  dispense_delay_checkbox: true
  dispense_delay_seconds: 1
  dispense_delay_mmFromBottom: 2
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer PB7
  pipette: p300_single_gen2
  volume: 100
  path: multiDispense
  changeTip: once
  aspirate_labware: PB 12 wells
  aspirate_wells: B3
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  aspirate_flowRate: 300
  aspirate_mix_checkbox: true
  aspirate_mix_times: 3
  aspirate_mix_volume: 300
  aspirate_mmFromBottom: 2
  dispense_labware: Experiment
  dispense_wells: D4, F5, C6, G11
  dispense_flowRate: 300
  dispense_mmFromBottom: 2
  dispense_delay_checkbox: true
  dispense_delay_seconds: 1
  dispense_delay_mmFromBottom: 2
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer PB8
  pipette: p300_single_gen2
  volume: 100
  path: multiDispense
  changeTip: once
  aspirate_labware: PB 12 wells
  aspirate_wells: B4
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  aspirate_flowRate: 300
  aspirate_mix_checkbox: true
  aspirate_mix_times: 3
  aspirate_mix_volume: 300
  aspirate_mmFromBottom: 2
  dispense_labware: Experiment
  dispense_wells: B2, E5, C10, E10
  dispense_flowRate: 300
  dispense_mmFromBottom: 2
  dispense_delay_checkbox: true
  dispense_delay_seconds: 1
  dispense_delay_mmFromBottom: 2
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer PB9
  pipette: p300_single_gen2
  volume: 100
  path: multiDispense
  changeTip: once
  aspirate_labware: PB 12 wells
  aspirate_wells: C1
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  aspirate_flowRate: 300
  aspirate_mix_checkbox: true
  aspirate_mix_times: 3
  aspirate_mix_volume: 300
  aspirate_mmFromBottom: 2
  dispense_labware: Experiment
  dispense_wells: C4, D7, F9, G9
  dispense_flowRate: 300
  dispense_mmFromBottom: 2
  dispense_delay_checkbox: true
  dispense_delay_seconds: 1
  dispense_delay_mmFromBottom: 2
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer PB10
  pipette: p300_single_gen2
  volume: 100
  path: multiDispense
  changeTip: once
  aspirate_labware: PB 12 wells
  aspirate_wells: C2
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  aspirate_flowRate: 300
  aspirate_mix_checkbox: true
  aspirate_mix_times: 3
  aspirate_mix_volume: 300
  aspirate_mmFromBottom: 2
  dispense_labware: Experiment
  dispense_wells: D5, B7, F8, C9
  dispense_flowRate: 300
  dispense_mmFromBottom: 2
  dispense_delay_checkbox: true
  dispense_delay_seconds: 1
  dispense_delay_mmFromBottom: 2
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer PB11
  pipette: p300_single_gen2
  volume: 100
  path: multiDispense
  changeTip: once
  aspirate_labware: PB 12 wells
  aspirate_wells: C3
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  aspirate_flowRate: 300
  aspirate_mix_checkbox: true
  aspirate_mix_times: 3
  aspirate_mix_volume: 300
  aspirate_mmFromBottom: 2
  dispense_labware: Experiment
  dispense_wells: E4, G4, B9, D10
  dispense_flowRate: 300
  dispense_mmFromBottom: 2
  dispense_delay_checkbox: true
  dispense_delay_seconds: 1
  dispense_delay_mmFromBottom: 2
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer PB12
  pipette: p300_single_gen2
  volume: 100
  path: multiDispense
  changeTip: once
  aspirate_labware: PB 12 wells
  aspirate_wells: C4
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  aspirate_flowRate: 300
  aspirate_mix_checkbox: true
  aspirate_mix_times: 3
  aspirate_mix_volume: 300
  aspirate_mmFromBottom: 2
  dispense_labware: Experiment
  dispense_wells: D2, F7, D8, G10
  dispense_flowRate: 300
  dispense_mmFromBottom: 2
  dispense_delay_checkbox: true
  dispense_delay_seconds: 1
  dispense_delay_mmFromBottom: 2
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: source_well
labwareDefinitions:
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commands:
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- pickUpTip: {pipetteId: p300_single_gen2, labwareId: Opentrons 96 Tip Rack 300 µL, wellName: A1}
- aspirate: {pipetteId: p300_single_gen2, volume: 300, labwareId: PB 12 wells, wellName: A1, wellLocation: {origin: bottom, offset: {z: 2}}, flowRate: 300}
- dispense: {pipetteId: p300_single_gen2, volume: 300, labwareId: PB 12 wells, wellName: A1, wellLocation: {origin: bottom, offset: {z: 2}}, flowRate: 300}
- delay: {seconds: 1}
- aspirate: {pipetteId: p300_single_gen2, volume: 300, labwareId: PB 12 wells, wellName: A1, wellLocation: {origin: bottom, offset: {z: 2}}, flowRate: 300}
- dispense: {pipetteId: p300_single_gen2, volume: 300, labwareId: PB 12 wells, wellName: A1, wellLocation: {origin: bottom, offset: {z: 2}}, flowRate: 300}
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