opentrons/protocol-designer 6.1.0
schemaVersion: 6
protocolName: Making 0.7.4
author: Jimi GH
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p20_single_gen2: {mount: left}
  p300_single_gen2: {mount: right}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, location: 12}
  Opentrons 96 Tip Rack 20 µL: {definitionId: opentrons/opentrons_96_tiprack_20ul/1, location: 10}
  Opentrons 96 Tip Rack 300 µL: {definitionId: opentrons/opentrons_96_tiprack_300ul/1, location: 11}
  Opentrons 10 Tube Rack: {definitionId: opentrons/opentrons_10_tuberack_nest_4x50ml_6x15ml_conical/1, location: 9}
  Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap: {definitionId: opentrons/opentrons_24_tuberack_nest_1.5ml_snapcap/1, location: 7}
  Growth Factors 96 Well Plate: {definitionId: opentrons/nest_96_wellplate_200ul_flat/1, location: 8}
pipetteTiprackAssignments:
  p20_single_gen2: opentrons/opentrons_96_tiprack_20ul/1
  p300_single_gen2: opentrons/opentrons_96_tiprack_300ul/1
ingredients:
  - SS: {serialize: true}
  - FC
  - Z7
  - RHA
  - se-FG
  - LR IG1
  - TG
  - HC21
  - L-AG
  - E
  - 2-ME
  - Na
  - 2P-LAA
  - AA/PSA
  - ReI
  - TF
  - H-DMEM
  - PDGF-AB
ingredLocations:
  Opentrons 10 Tube Rack:
    RHA {volume: 10000}: A1
    L-AG {volume: 10000}: A2
    E {volume: 10000}: B1
    2-ME {volume: 10000}: B2
    2P-LAA {volume: 10000}: C2
    H-DMEM {volume: 39000}: A3
    Na {volume: 40000}: B3
    HC21 {volume: 1000}: C1
  Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap:
    ReI {volume: 1000}: A1
    FC {volume: 1000}: A4
    SS {volume: 1000}: A2
    Z7 {volume: 1000}: A3
    AA/PSA {volume: 1000}: A5
  Growth Factors 96 Well Plate:
    se-FG {volume: 200}: A1
    TG {volume: 200}: A3
    LR IG1 {volume: 200}: A2
    TF {volume: 200}: A4
    PDGF-AB {volume: 200}: A5
savedStepForms:
- stepType: moveLiquid
  stepName: transfer AA/PSA
  pipette: p300_single_gen2
  volume: 200
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap
  aspirate_wells: A5
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  aspirate_flowRate: 300
  aspirate_mix_checkbox: true
  aspirate_mix_times: 2
  aspirate_mix_volume: 300
  aspirate_mmFromBottom: 5
  dispense_labware: Opentrons 10 Tube Rack
  dispense_wells: A3
  dispense_flowRate: 300
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mix_volume: 300
  dispense_mmFromBottom: 70
- stepType: moveLiquid
  stepName: transfer RHA
  pipette: p300_single_gen2
  volume: 500
  path: single
  changeTip: always
  aspirate_labware: Opentrons 10 Tube Rack
  aspirate_wells: A1
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  aspirate_flowRate: 300
  aspirate_mix_checkbox: true
  aspirate_mix_times: 1
  aspirate_mix_volume: 300
  aspirate_mmFromBottom: 10
  dispense_labware: Opentrons 10 Tube Rack
  dispense_wells: A3
  dispense_flowRate: 300
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mix_volume: 300
  dispense_mmFromBottom: 70
- stepType: moveLiquid
  stepName: transfer HC21
  pipette: p300_single_gen2
  volume: 60
  path: single
  changeTip: always
  aspirate_labware: Opentrons 10 Tube Rack
  aspirate_wells: C1
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  aspirate_flowRate: 300
  aspirate_mmFromBottom: 60
  dispense_labware: Opentrons 10 Tube Rack
  dispense_wells: A3
  dispense_flowRate: 300
  dispense_mix_checkbox: true
  dispense_mix_times: 2
  dispense_mix_volume: 300
  dispense_mmFromBottom: 70
- stepType: moveLiquid
  stepName: transfer L-AG
  pipette: p300_single_gen2
  volume: 120
  path: single
  changeTip: always
  aspirate_labware: Opentrons 10 Tube Rack
  aspirate_wells: A2
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  aspirate_flowRate: 300
  aspirate_mmFromBottom: 60
  dispense_labware: Opentrons 10 Tube Rack
  dispense_wells: A3
  dispense_flowRate: 300
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mix_volume: 300
  dispense_mmFromBottom: 70
- stepType: moveLiquid
  stepName: transfer E
  pipette: p300_single_gen2
  volume: 40
  path: single
  changeTip: always
  aspirate_labware: Opentrons 10 Tube Rack
  aspirate_wells: B1
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  aspirate_flowRate: 300
  aspirate_mmFromBottom: 60
  dispense_labware: Opentrons 10 Tube Rack
  dispense_wells: A3
  dispense_flowRate: 300
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 300
  dispense_mmFromBottom: 70
- stepType: moveLiquid
  stepName: transfer 2-ME
  pipette: p300_single_gen2
  volume: 88
  path: single
  changeTip: always
  aspirate_labware: Opentrons 10 Tube Rack
  aspirate_wells: B2
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  aspirate_flowRate: 300
  aspirate_mmFromBottom: 60
  dispense_labware: Opentrons 10 Tube Rack
  dispense_wells: A3
  dispense_flowRate: 300
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mix_volume: 300
  dispense_mmFromBottom: 70
- stepType: moveLiquid
  stepName: transfer NaHCO3
  pipette: p300_single_gen2
  volume: 100
  path: single
  changeTip: always
  aspirate_labware: Opentrons 10 Tube Rack
  aspirate_wells: B3
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  aspirate_flowRate: 300
  aspirate_mmFromBottom: 60
  dispense_labware: Opentrons 10 Tube Rack
  dispense_wells: A3
  dispense_flowRate: 300
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mix_volume: 300
  dispense_mmFromBottom: 70
- stepType: moveLiquid
  stepName: transfer 2P-LAA
  pipette: p300_single_gen2
  volume: 40
  path: single
  changeTip: always
  aspirate_labware: Opentrons 10 Tube Rack
  aspirate_wells: C2
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  aspirate_flowRate: 300
  aspirate_mmFromBottom: 60
  dispense_labware: Opentrons 10 Tube Rack
  dispense_wells: A3
  dispense_flowRate: 300
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mix_volume: 300
  dispense_mmFromBottom: 70
- stepType: moveLiquid
  stepName: transfer Re-I
  pipette: p300_single_gen2
  volume: 32
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap
  aspirate_wells: A1
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  aspirate_flowRate: 300
  aspirate_mix_checkbox: true
  aspirate_mix_times: 1
  aspirate_mix_volume: 300
  aspirate_mmFromBottom: 15
  dispense_labware: Opentrons 10 Tube Rack
  dispense_wells: A3
  dispense_flowRate: 300
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 300
  dispense_mmFromBottom: 70
- stepType: moveLiquid
  stepName: transfer SS
  pipette: p300_single_gen2
  volume: 40
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap
  aspirate_wells: A2
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  aspirate_flowRate: 300
  aspirate_mix_checkbox: true
  aspirate_mix_times: 1
  aspirate_mix_volume: 300
  aspirate_mmFromBottom: 15
  dispense_labware: Opentrons 10 Tube Rack
  dispense_wells: A3
  dispense_flowRate: 300
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mix_volume: 300
  dispense_mmFromBottom: 70
- stepType: moveLiquid
  stepName: transfer Z7
  pipette: p300_single_gen2
  volume: 40
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap
  aspirate_wells: A3
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  aspirate_flowRate: 300
  aspirate_mix_checkbox: true
  aspirate_mix_times: 1
  aspirate_mix_volume: 300
  aspirate_mmFromBottom: 15
  dispense_labware: Opentrons 10 Tube Rack
  dispense_wells: A3
  dispense_flowRate: 300
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mix_volume: 300
  dispense_mmFromBottom: 70
- stepType: moveLiquid
  stepName: transfer FC
  pipette: p300_single_gen2
  volume: 80
  path: single
  changeTip: always
  aspirate_labware: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap
  aspirate_wells: A4
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  aspirate_flowRate: 300
  aspirate_mix_checkbox: true
  aspirate_mix_times: 1
  aspirate_mix_volume: 300
  aspirate_mmFromBottom: 15
  dispense_labware: Opentrons 10 Tube Rack
  dispense_wells: A3
  dispense_flowRate: 300
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 300
  dispense_mmFromBottom: 70
- stepType: moveLiquid
  stepName: transfer 1:10 FG
  pipette: p20_single_gen2
  volume: 20
  path: single
  changeTip: always
  aspirate_labware: Growth Factors 96 Well Plate
  aspirate_wells: A1
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  aspirate_flowRate: 20
  aspirate_mix_checkbox: true
  aspirate_mix_times: 1
  aspirate_mix_volume: 20
  aspirate_mmFromBottom: 1
  dispense_labware: Opentrons 10 Tube Rack
  dispense_wells: A3
  dispense_flowRate: 20
  dispense_mmFromBottom: 70
- stepType: moveLiquid
  stepName: transfer LR-IG1
  pipette: p20_single_gen2
  volume: 8
  path: single
  changeTip: always
  aspirate_labware: Growth Factors 96 Well Plate
  aspirate_wells: A2
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  aspirate_flowRate: 20
  aspirate_mix_checkbox: true
  aspirate_mix_times: 1
  aspirate_mix_volume: 20
  aspirate_mmFromBottom: 1
  dispense_labware: Opentrons 10 Tube Rack
  dispense_wells: A3
  dispense_flowRate: 20
  dispense_mmFromBottom: 70
- stepType: mix
  stepName: mix
  pipette: p300_single_gen2
  volume: 300
  times: 3
  changeTip: always
  labware: Opentrons 10 Tube Rack
  wells: A3
  aspirate_flowRate: 300
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  dispense_flowRate: 300
  mix_mmFromBottom: 60
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer 1:10 TG
  pipette: p20_single_gen2
  volume: 20
  path: single
  changeTip: always
  aspirate_labware: Growth Factors 96 Well Plate
  aspirate_wells: A3
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  aspirate_flowRate: 20
  aspirate_mix_checkbox: true
  aspirate_mix_times: 1
  aspirate_mix_volume: 20
  aspirate_mmFromBottom: 1
  dispense_labware: Opentrons 10 Tube Rack
  dispense_wells: A3
  dispense_flowRate: 20
  dispense_mmFromBottom: 70
- stepType: moveLiquid
  stepName: transfer TF
  pipette: p300_single_gen2
  volume: 40
  path: single
  changeTip: always
  aspirate_labware: Growth Factors 96 Well Plate
  aspirate_wells: A4
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  aspirate_flowRate: 300
  aspirate_mix_checkbox: true
  aspirate_mix_times: 1
  aspirate_mix_volume: 40
  aspirate_mmFromBottom: 1
  dispense_labware: Opentrons 10 Tube Rack
  dispense_wells: A3
  dispense_flowRate: 300
  dispense_mmFromBottom: 65
- stepType: mix
  stepName: mix
  pipette: p300_single_gen2
  volume: 300
  times: 3
  changeTip: always
  labware: Opentrons 10 Tube Rack
  wells: A3
  aspirate_flowRate: 300
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  dispense_flowRate: 300
  mix_mmFromBottom: 60
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer 1:10 PDGF
  pipette: p20_single_gen2
  volume: 20
  path: single
  changeTip: always
  aspirate_labware: Growth Factors 96 Well Plate
  aspirate_wells: A5
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  aspirate_flowRate: 20
  aspirate_mix_checkbox: true
  aspirate_mix_times: 1
  aspirate_mix_volume: 20
  aspirate_mmFromBottom: 1
  dispense_labware: Opentrons 10 Tube Rack
  dispense_wells: A3
  dispense_flowRate: 20
  dispense_mmFromBottom: 60
labwareDefinitions:
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commands:
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- pickUpTip: {pipetteId: p300_single_gen2, labwareId: Opentrons 96 Tip Rack 300 µL, wellName: A1}
- aspirate: {pipetteId: p300_single_gen2, volume: 300, labwareId: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap, wellName: A5, wellLocation: {origin: bottom, offset: {z: 5}}, flowRate: 300}
- dispense: {pipetteId: p300_single_gen2, volume: 300, labwareId: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap, wellName: A5, wellLocation: {origin: bottom, offset: {z: 5}}, flowRate: 300}
- aspirate: {pipetteId: p300_single_gen2, volume: 300, labwareId: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap, wellName: A5, wellLocation: {origin: bottom, offset: {z: 5}}, flowRate: 300}
- dispense: {pipetteId: p300_single_gen2, volume: 300, labwareId: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap, wellName: A5, wellLocation: {origin: bottom, offset: {z: 5}}, flowRate: 300}
- aspirate: {pipetteId: p300_single_gen2, volume: 200, labwareId: Opentrons 24 Tube Rack with NEST 1.5 mL Snapcap, wellName: A5, wellLocation: {origin: bottom, offset: {z: 5}}, flowRate: 300}
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