opentrons/protocol-designer 6.1.0
schemaVersion: 6
protocolName: test
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p20_single_gen2: {mount: left}
  p300_single_gen2: {mount: right}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, location: 12}
  Opentrons 96 Tip Rack 20 µL: {definitionId: opentrons/opentrons_96_tiprack_20ul/1, location: 10}
  Opentrons 96 Tip Rack 300 µL: {definitionId: opentrons/opentrons_96_tiprack_300ul/1, location: 11}
  1.5ml tubes: {definitionId: opentrons/opentrons_24_tuberack_eppendorf_1.5ml_safelock_snapcap/1, location: 4}
  GFs: {definitionId: opentrons/nest_96_wellplate_200ul_flat/1, location: 8}
  15 50ml tubes: {definitionId: opentrons/opentrons_10_tuberack_nest_4x50ml_6x15ml_conical/1, location: 6}
pipetteTiprackAssignments:
  p20_single_gen2: opentrons/opentrons_96_tiprack_20ul/1
  p300_single_gen2: opentrons/opentrons_96_tiprack_300ul/1
ingredients:
  - PSA
  - HC21
  - se-FG
  - water
ingredLocations:
  15 50ml tubes:
    HC21 {volume: 10000}: C1
    water {volume: 40000}: A4
  GFs:
    se-FG {volume: 200}: A1
  1.5ml tubes:
    PSA {volume: 1000}: A5
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 60
  path: single
  changeTip: always
  aspirate_labware: 15 50ml tubes
  aspirate_wells: C1
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  aspirate_flowRate: 300
  aspirate_mmFromBottom: 60
  dispense_labware: 15 50ml tubes
  dispense_wells: A4
  dispense_mmFromBottom: 70
  dispense_touchTip_checkbox: true
  dispense_touchTip_mmFromBottom: 99.8
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 200
  path: single
  changeTip: always
  aspirate_labware: 1.5ml tubes
  aspirate_wells: A5
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  aspirate_mmFromBottom: 15
  dispense_labware: 15 50ml tubes
  dispense_wells: A4
  dispense_mmFromBottom: 70
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 2
  path: single
  changeTip: always
  aspirate_labware: GFs
  aspirate_wells: A1
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  aspirate_mmFromBottom: 4
  dispense_labware: 15 50ml tubes
  dispense_wells: A4
  dispense_mmFromBottom: 70
labwareDefinitions:
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commands:
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- pickUpTip: {pipetteId: p300_single_gen2, labwareId: Opentrons 96 Tip Rack 300 µL, wellName: A1}
- aspirate: {pipetteId: p300_single_gen2, volume: 60, labwareId: 15 50ml tubes, wellName: C1, wellLocation: {origin: bottom, offset: {z: 60}}, flowRate: 300}
- dispense: {pipetteId: p300_single_gen2, volume: 60, labwareId: 15 50ml tubes, wellName: A4, wellLocation: {origin: bottom, offset: {z: 70}}, flowRate: 46.43}
- touchTip: {pipetteId: p300_single_gen2, labwareId: 15 50ml tubes, wellName: A4, wellLocation: {origin: bottom, offset: {z: 99.8}}}
- dropTip: {pipetteId: p300_single_gen2, labwareId: Trash, wellName: A1}
- pickUpTip: {pipetteId: p300_single_gen2, labwareId: Opentrons 96 Tip Rack 300 µL, wellName: B1}
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